WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Initialization
    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSettings(Path=exampleSession.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RandomSeed)
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    GroupWorkflow VariableDeclaration
        BehaviorSubject<System.Boolean> WallVisibilityEvent
        BehaviorSubject<System.String> LogFrameEvent

    GroupWorkflow TrialSampling
        GroupWorkflow ListMode => #0
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text=ListMode) => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=List))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow ShuffledListMode => #1
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Shuffle))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials => #7
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            SubscribeSubject RngSeed => #8
            #7, #8 -> Bonsai.Numerics.Permutation
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow BlockMode => #2
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation BlockMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Block))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany BuildTrials
                SubscribeSubject SessionSettings
                -> Take(Count=1)
                -> BuildTrialsFromBlock(Random="")
                -> WorkflowOutput
            -> WorkflowOutput
        #0, #1, #2 -> Merge
        -> Take(Count=1)
        -> AsyncSubject TrialList
        -> WorkflowOutput

Annotation(Text="")
-> GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> Format(Format={0}/{1}, Selector="Metadata.RootPath,Metadata.AnimalId")
    -> Take(Count=1)
    -> Timestamp
    -> Format(Format={0}/{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp.UtcDateTime")
    -> AsyncSubject SessionRootPath

    GroupWorkflow LogFrameEvents
        GroupWorkflow TimestampLogger
            SubscribeSubject LogFrameEvent => #0
            SubscribeSubject RenderFrameEvent
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> ElementIndex
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Index as Index,
                Value as Time)
            #0, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as EventName,
                Item2 as Frame)
            -> PublishSubject FrameEventLogger
            -> WorkflowOutput

        Annotation(Text="List of all events to be logged using frame number")
        -> GroupWorkflow ListFrameEvents
            SubscribeSubject LickEvent
            -> StringProperty(Value=Lick)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveReward
            -> StringProperty(Value=Reward)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveOptoStim
            -> StringProperty(Value=OptoStim)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject TeleportTo
            -> StringProperty(Value=Teleport)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject WallVisibilityEvent
            -> StringProperty(Value=WallVisibility)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject LogFrameEvent
            -> WorkflowOutput

    Disable GroupWorkflow Loggers
        SubscribeSubject AI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=AnalogInput.bin)

        SubscribeSubject DI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=DigitalInput.bin)

        SubscribeSubject RotaryEncoderPosition
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=RotaryEncoder.csv)

        SubscribeSubject CurrentPosition
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Z as Position)
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=VrPosition.csv)

        SubscribeSubject FrameEventLogger
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=FrameEvents.csv)

GroupWorkflow RenderConfig
    Bonsai.Shaders.CreateWindow
      Width=500
      Height=500
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml)
    -> Take(Count=1) => #6
    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml)
    -> Take(Count=1) => #8
    #6, #8 -> Merge
    -> ToArray
    -> AsyncSubject ScreenCalibrationSettings

    Bonsai.Shaders.RenderFrame
    -> PublishSubject RenderFrameEvent
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #16
    -> Disable GroupWorkflow MonitorView
        WorkflowInput Source1
        -> BehaviorSubject PreMonitorDraw

        SubscribeSubject PreMonitorDraw => #2
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=0))
        -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation)) => #5
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Translation) => #8
        SubscribeSubject ManualScreenCalibration => #9
        FloatProperty(Value=0.1) => #10
        #9, #10 -> WithLatestFrom
        -> Multiply => #12
        #8, #12 -> CombineLatest
        -> Add
        -> PropertyMapping(Translation) => #15
        #2, #5, #15 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=40.10704565915762, Z=0), Translation(X=0, Y=0, Z=0.1))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1) => #17
        SubscribeSubject PreMonitorDraw => #18
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=1))
        -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation)) => #21
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=1))
        -> MemberSelector(Selector=Translation) => #24
        SubscribeSubject ManualScreenCalibration => #25
        FloatProperty(Value=0.1) => #26
        #25, #26 -> WithLatestFrom
        -> Multiply => #28
        #24, #28 -> CombineLatest
        -> Add
        -> PropertyMapping(Translation) => #31
        #18, #21, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=40.10704565915762, Z=0), Translation(X=0, Y=0, Z=0.1))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1) => #33
        #17, #33 -> Zip
        -> WorkflowOutput

        Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> Take(Count=1) => #37
        Bonsai.Shaders.Input.KeyDown(Key=Left, Modifiers=nil)
        -> IntProperty(Value=-1) => #39
        Bonsai.Shaders.Input.KeyDown(Key=Right, Modifiers=nil)
        -> IntProperty(Value=1) => #41
        #39, #41 -> Merge => #42
        -> PropertyMapping(X) => #43
        #42, #43 -> Bonsai.Vision.CreatePoint3d(X=-1, Y=0, Z=0) => #44
        Bonsai.Shaders.Input.KeyDown(Key=Up, Modifiers=nil)
        -> IntProperty(Value=1) => #46
        Bonsai.Shaders.Input.KeyDown(Key=Down, Modifiers=nil)
        -> IntProperty(Value=-1) => #48
        #46, #48 -> Merge => #49
        -> PropertyMapping(Y) => #50
        #49, #50 -> Bonsai.Vision.CreatePoint3d(X=0, Y=1, Z=0) => #51
        #44, #51 -> Merge
        -> Accumulate => #53
        #37, #53 -> Concat
        -> BehaviorSubject ManualScreenCalibration
    -> Disable PublishSubject PostDrawing
    #16 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0.1))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    -> PublishSubject PostDrawing

    GroupWorkflow SyncQuad
        SubscribeSubject PostDrawing
        -> Int64Property(Value=1)
        -> Accumulate
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> Bonsai.Shaders.UpdateRenderState(RenderState="")
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-8, Right=8, Bottom=-4.5, Top=4.5) => #6
        #5 -> PropertyMapping(ColorR, ColorG, ColorB) => #7
        #6, #7 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=7.9
          LocationY=4.4
          Layer=10
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1
        -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow NIDAQ
        GroupWorkflow AnalogOutput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=30000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=3000) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AO_Settings

            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferLength(Selector=BufferSize))
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=50, Waveform=Square, SampleRate=30000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject AO_Clock

            SubscribeSubject AO_Generation => #12
            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferSize(Selector=BufferSize)) => #14
            #12, #14 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=30000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=3000
              Channels(AnalogOutputChannelConfiguration(ChannelName=OptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=5, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #17
            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=10, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #19
            #17, #19 -> Concat
            -> ToArray
            -> AsyncSubject OptoWaveformBank

            GroupWorkflow OptoStimWaveform
                Defer Constant => #0
                    SubscribeSubject AO_Clock => #0
                    SubscribeSubject AO_Settings => #1
                    -> MemberSelector(Selector=BufferSize) => #2
                    #1 -> IntProperty(Value=1) => #3
                    #2, #3 -> Zip
                    -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
                    #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=3000, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> WorkflowOutput
                PublishSubject<System.Int32> GiveOptoStim => #1
                #0, #1 -> TakeUntil => #2
                SubscribeSubject GiveOptoStim
                -> InputMapping(StimId(Selector=it))
                -> SelectMany PlayWaveform => #5
                    SubscribeSubject OptoWaveformBank => #0
                    ExternalizedMapping(Value(DisplayName=StimId)) => #1
                    #0, #1 -> Index(Operand=IntProperty(Value=0))
                    -> Take(Count=1)
                    -> AsyncSubject ThisWaveform

                    Annotation
                      Text: The idea of this workflow is to check how many times the incoming stored waveform "fits" inside each of the Clock buffers. Next, we round it up, and pad the remaining pixels with 0 using the IplImage operator.
                    -> GroupWorkflow PadWaveform
                        SubscribeSubject ThisWaveform => #0
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Width) => #2
                        SubscribeSubject AO_Settings
                        -> MemberSelector(Selector=BufferSize) => #4
                        #2, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform PaddingSize => #6
                          Expression: Convert.ToInt32(Math.Ceiling((Item1 *1.0) / Item2)) * Item2
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Height) => #8
                        #6, #8 -> Zip
                        -> PropertyMapping(Size(Selector="Item1, Item2")) => #10
                        #0, #10 -> Bonsai.Vision.ResizeCanvas(Size(Width=3000, Height=1), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset(X=0, Y=0))
                        -> Bonsai.Dsp.ConvertToMat
                        -> Take(Count=1)
                        -> AsyncSubject PaddedWaveform
                        -> WorkflowOutput

                    SubscribeSubject PaddedWaveform => #7
                    SubscribeSubject AO_Settings
                    -> MemberSelector(Selector=BufferSize) => #9
                    #7, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item1) => #11
                    SubscribeSubject AO_Settings
                    -> PropertyMapping(Count(Selector=BufferSize), Skip(Selector=BufferSize)) => #13
                    #11, #13 -> Bonsai.Dsp.Buffer(Count=3000, Skip=3000) => #14
                    SubscribeSubject AO_Clock => #15
                    #14, #15 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                #2, #5 -> Concat
                -> Repeat
                -> WorkflowOutput
            -> BehaviorSubject AO_Generation

            Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Control", SuppressRepetitions=true)
            -> MulticastSubject GiveOptoStim

        GroupWorkflow AnalogInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=1000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=10) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AI_Settings

            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=SamplingRate)
            -> Disable PropertyMapping(SampleRate) => #10
            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=BufferSize)
            -> Disable PropertyMapping(BufferSize) => #13
            Source1=#10, Source3=#13 -> Disable Bonsai.DAQmx.AnalogInput
              SignalSource=""
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10
              SamplesPerChannel=nil
              Channels
                AnalogInputChannelConfiguration(ChannelName=LickSensor, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=CopyOptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
            -> Disable PublishSubject AI_Data

            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=SamplingRate)
            -> Disable PropertyMapping(SampleRate) => #18
            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=BufferSize)
            -> Disable PropertyMapping(BufferLength) => #21
            #18, #21 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=10, Frequency=60, Waveform=Sine, SampleRate=1000, Amplitude=1, Offset=0, Phase=0)
            -> Disable Bonsai.Dsp.Tile(RowTiles=3, ColumnTiles=1)
            -> Disable PublishSubject AI_Data

            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #27
            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #30
            #27, #30 -> Bonsai.DAQmx.AnalogInputTriggered
              SignalSource=""
              DigitalTriggerSource=di/StartTrigger
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10
              SamplesPerChannel=nil
              Channels
                AnalogInputChannelConfiguration(ChannelName=LickDetector, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photostimulation, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
            -> PublishSubject AI_Data

        GroupWorkflow DigitalInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=3000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=100) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject DI_Settings

            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #10
            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #13
            Annotation Notes(Text="The whole Digital Input port is acquired as a single byte per timepoint") => #14
            #10, #13, #14 -> Bonsai.DAQmx.DigitalInput
              SignalSource=""
              SampleRate=3000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=100
              SamplesPerChannel=nil
              Channels(DigitalInputChannelConfiguration(ChannelName=DigitalInputs, Grouping=OneChannelForAllLines, Lines=Dev1/port0/line0:7))
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.2S)
            -> PublishSubject DI_Data

            Disable SubscribeSubject DI_Settings
            -> Disable MemberSelector(Selector=SamplingRate)
            -> Disable PropertyMapping(SampleRate) => #20
            Disable SubscribeSubject DI_Settings
            -> Disable MemberSelector(Selector=BufferSize)
            -> Disable PropertyMapping(BufferLength) => #23
            #20, #23 -> Disable Bonsai.Dsp.FunctionGenerator(BufferLength=100, Frequency=100, Waveform=Sine, SampleRate=1000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> Disable PublishSubject DI_Data

        GroupWorkflow PwmGenerator
            SubscribeSubject CameraFPS
            -> PropertyMapping(Frequency)
            -> Bonsai.DAQmx.CounterOutput(Channel=Dev1/ctr0, TriggerSource="", Frequency=50, DutyCycle=0.5, NumberOfSamples=nil)
            -> IntProperty(Value=0)
            -> WorkflowOutput

        GroupWorkflow RotaryEncoder
            SubscribeSubject RenderFrameEvent
            -> ElementIndex => #1
            -> MemberSelector(Selector=Value.TimeStep.ElapsedRealTime)
            -> Accumulate => #3
            -> Disable Bonsai.DAQmx.RotaryEncoderInput(Channel=Dev1/ctr1, DecoderType=X1, TicksPerRevolution=1000, StartingRadians=0, ResetOnZ=false)
            -> IntProperty(Value=0) => #5
            #1 -> MemberSelector(Selector=Index) => #6
            #5, #6, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as RotaryEncoder,
                Item2 as FrameIndex,
                Item3 as RenderElapsedTime)
            -> PublishSubject RotaryEncoderPosition
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            BehaviorSubject<System.Single> GiveReward => #0
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardCalibration) => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform CalibrateValue
              Expression: Item1 * Item2.Intercept + Item2.Slope
            -> Bonsai.Dsp.Rescale(Min=0.0001, Max=0.9999, RangeMin=0.0001, RangeMax=0.9999, RescaleType=Clamp)
            -> InputMapping(HighTime(Selector=it))
            -> CreateObservable GiveReward
                ExternalizedMapping(InitialDelay, LowTime, HighTime, NumberOfSamples, Channel)
                -> Bonsai.DAQmx.PulseOutput(Channel=Dev1/ctr3, InitialDelay=0, LowTime=0.1, HighTime=0.1, NumberOfSamples=1)
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput

    GroupWorkflow Cameras
        IntProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject CameraFPS

    GroupWorkflow PostProcessing
        GroupWorkflow LickSensor
            SubscribeSubject AI_Data
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> PublishSubject LickSensor

            SubscribeSubject LickSensor
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> Bonsai.Dsp.Threshold(ThresholdValue=1, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Merge
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> DistinctUntilChanged
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.06S) => #11
            #10, #11 -> Gate
            -> PublishSubject LickEvent

GroupWorkflow PositionUpdates
    FloatProperty(Value=0)
    -> Take(Count=1) => #1
    Bonsai.Shaders.Input.KeyDown(Key=F2, Modifiers=nil)
    -> FloatProperty(Value=0) => #3
    BehaviorSubject<System.Single> TeleportTo => #4
    #1, #3, #4 -> Merge => #5
    ExternalizedMapping(PositionMax, PositionMin) => #6
    #5, #6 -> CreateObservable ResetPosition
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TeleportPosition

        ExternalizedMapping(Value(DisplayName=PositionMin))
        -> FloatProperty(Value=-0.5) => #4
        ExternalizedMapping(Value(DisplayName=PositionMax))
        -> FloatProperty(Value=7) => #6
        #4, #6 -> CombineLatest
        -> BehaviorSubject PositionBounds

        SubscribeSubject TeleportPosition
        -> Take(Count=1) => #10
        SubscribeSubject DisplacementUpdate => #11
        SubscribeSubject TeleportPosition => #12
        #11, #12 -> Scan => #13
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject PositionBounds => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: it.Item1 < it.Item2.Item1 ? it.Item2.Item1 : (it.Item1 > it.Item2.Item2 ? it.Item2.Item2 : it.Item1)
            #7, #4 -> Zip
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #10, #13 -> Concat
        -> WorkflowOutput
    -> Switch
    -> InputMapping(Z(Selector=it)) => #9
    ExternalizedMapping(Y(DisplayName=DefaultY), X(DisplayName=DefaultX)) => #10
    #9, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.2, Z=4.000054)
    -> BehaviorSubject CurrentPosition

    BooleanProperty(Value=true)
    -> BehaviorSubject EnableDisplacementUpdates

    Disable SubscribeSubject EncoderPosition
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable Multiply(Operand=FloatProperty(Value=0.0005)) => #17
    Bonsai.Shaders.Input.MouseWheel
    -> MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Multiply(Operand=FloatProperty(Value=0.05)) => #20
    #17, #20 -> Condition EnableUpdates
        SubscribeSubject EnableDisplacementUpdates
        -> WorkflowOutput
    -> InputMapping(Value(Selector=it))
    -> FloatProperty(Value=-0.05) => #23
    Bonsai.Shaders.UpdateFrame => #24
    BehaviorSubject<System.Single> PassiveUpdateGain
    -> PropertyMapping(Value) => #26
    #24, #26 -> FloatProperty(Value=0) => #27
    #23, #27 -> Merge
    -> PublishSubject DisplacementUpdate

Annotation(Text="")
-> GroupWorkflow TrialLogic
    ExternalizedMapping(Value(DisplayName=CorridorHeight))
    -> FloatProperty(Value=0.5) => #1
    ExternalizedMapping(Value(DisplayName=CorridorWidth))
    -> FloatProperty(Value=1) => #3
    #1, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.Item1 as Height,
        it.Item2 as Width,
        it.Item1 * 0.5 as HeightOffset,
        it.Item2 * 0.5 as WidthOffset)
    -> Take(Count=1)
    -> AsyncSubject CorridorSpecs

    SubscribeSubject TrialList
    -> Merge
    -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisTrial

        GroupWorkflow Trial
            PublishSubject<System.Reactive.Unit> EndTrial
            -> Take(Count=1)
            -> WorkflowOutput

            GroupWorkflow DrawTrial
                Annotation DrawFloors(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=FloorSegments)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\DrawFloorSegment.bonsai)
                -> Merge

                Annotation DrawSegments(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=CorridorSegments)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
                -> ReplaySubject TrialSegments(BufferSize=nil)
                -> Count
                -> AsyncSubject NumberOfSegments

                SubscribeSubject TrialSegments
                -> Merge
                -> BehaviorSubject SegmentEvents

            GroupWorkflow TrialLogic
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Teleport)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Teleport.bonsai)
                -> Merge
                -> Unit
                -> MulticastSubject EndTrial

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=PassiveMode)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\ControlPassiveGain.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Reward)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Reward.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=OptoStim)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\OptoStim.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=TeleportOnLick)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\TeleportOnLick.bonsai)
                -> Merge
        -> GroupWorkflow ResetState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject PassiveUpdateGain
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> Concat

Annotation(Text="")
-> GroupWorkflow Visualizers
    SubscribeSubject FrameEventLogger => #0
    -> Condition Lick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Lick))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
      Expression:
        new(
        Double.NaN as Reward,
        1.0 as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Reward
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Reward))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression:
        new(
        2.0 as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition OptoStim
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=OptoStim))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        3.0 as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Teleport
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Teleport))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        4.0 as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition WallVisibility
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=WallVisibility))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        5.0 as WallVisibility,
        Frame.Time as Time
        )
    #2, #4, #6, #8, #10 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Time, ValueSelector="Lick,Reward,OptoStim,Telepoprt,WallVisibility", SymbolType=Circle, LineWidth=0, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #13
    SubscribeSubject FrameEventLogger
    -> VisualizerMapping => #15
    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #19
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #23
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> VisualizerMapping => #26
    Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
    -> VisualizerMapping => #28
    #13, #15, #19, #23, #26, #28 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
